{
    "actions": {
        "acqdatetime": {
            "filters": {},
            "params": {}
        },
        "header_series": {
            "filters": {},
            "params": {
                "auto_suffix": true,
                "detector_names": "SN152495;Tafel|SN152508;Wand",
                "pidmm": 70,
                "roomname": "Generic",
                "sidmm": 1000,
                "tablepidmm": 70,
                "wallpidmm": 84
            }
        },
        "qc_series": {
            "filters": {},
            "params": {
                "auto_suffix": true,
                "detector_names": "SN152495;Tafel|SN152508;Wand",
                "hough_options": {
                    "edge_mfrac": 0.5,
                    "frac_hi": 0.0,
                    "hough_mode": "meijering",
                    "min_len_mm": 90.0,
                    "pre_blur": 0.66
                },
                "linepair_type": "RXT02",
                "outvalue": 1023,
                "pidmm": 70,
                "roomname": "Generic",
                "sidmm": 1000,
                "skip_cropping": true,
                "tablepidmm": 70,
                "use_mustbeinverted": false,
                "use_mustbemirrored": false,
                "use_mustbeprecropped": "100;1139;0;959",
                "use_phantomrotation": 0,
                "use_pixmm": 0.262,
                "wallpidmm": 84,
                "xymm0.6": "-83.0;-25.0",
                "xymm1.0": "-99.0;-8.0",
                "xymm1.4": "-87.9;24.2",
                "xymm1.8": "-81.3;-27.3",
                "xymm4.6": "-56.2;-2.2"
            }
        },
        "uniformity_series": {
            "filters": {},
            "params": {
                "artefactborder_is_circle": true,
                "artefactborderpx": "35;35;35;35",
                "auto_suffix": true,
                "detector_names": "SN152495;Tafel|SN152508;Wand",
                "pidmm": 70,
                "roomname": "Generic",
                "sidmm": 1000,
                "skip_cropping": true,
                "tablepidmm": 70,
                "use_mustbeinverted": false,
                "use_mustbemirrored": false,
                "use_mustbeprecropped": "100;1139;0;959",
                "use_pixmm": 0.262,
                "wallpidmm": 84
            }
        }
    },
    "cfgformat": "20180910",
    "comments": {
        "author": "Arnold Schilham, UMCU",
        "creator": "generate_config_json.py version 20180912",
        "description": "DX/Normi13Hough for Generic",
        "usage": [
            "params that must be set for both actions below:",
            "  \"roomname\": \"Bucky1\" # any identifier",
            "and either (to set autodetection of table/wall stand):",
            "  \"tablepidmm\": 85 # distance [mm] between phantom on table and image detector",
            "  \"wallpidmm\": 85 # distance [mm] between phantom on wall and image detector",
            "or (to set forced usage of one distance e.g. for portable detectors):",
            "  \"pidmm\": 0 # distance [mm] between phantom and image detector",
            "params that can be set if the line pair phantom is not found correctly:",
            "  \"linepair_typ\": \"RXT02\"",
            "    \"xymm0.6\": \"-83.0;-25.0\" # the location of the dot in 0.6 on the line pair pattern",
            "    \"xymm1.0\": \"-99.0;-8.0\"  # the location of the dot in 1.0 on the line pair pattern",
            "  \"linepair_typ\": \"typ38\"",
            "    \"xymm0.6\": \"-108.5;3.8\"  # the location of the dot in 0.6 on the line pair pattern",
            "    \"xymm1.4\": \"-87.9;24.2\"  # the location of the dot in 1.4 on the line pair pattern",
            "    \"xymm1.8\": \"-81.3;-27.3\"  # the location of the dot in 1.8 on the line pair pattern",
            "    \"xymm4.6\": \"-56.2;-2.2\"  # the location of the dot in 4.6 on the line pair pattern",
            "params that can be set if the phantom orientation is not found correctly:",
            "  \"use_mustbeprecropped\": \"100;1139;0;959\" # crop to [xmin_px, xmax_px, ymin_px, ymax_px] before processing",
            "  \"use_mustbemirrored\": True # force mirroring of image before analysis",
            "optionally stands can be identified by their detectorId:",
            "  \"detector_names\": \"SN1525UU;Tafel|SN152590;Wand\"",
            "optionally the source to detector distance can be set manually (with autodetection of table/wall stand)",
            "  \"tablesidmm\": 1150 # distance [mm] between source and image detector in table",
            "  \"wallsidmm\": 2000 # distance [mm] between source and image detector in wall",
            "or (to set forced usage of one distance e.g. for portable detectors):",
            "  \"sidmm\": 1150 # distance [mm] between source and image detector",
            "the following params can be supplied to override automatic determination:",
            "  \"use_pixmm\": 0.262 # the size of one pixel in mm (on the phantom)",
            "  \"use_mustbeinverted\": True # higher pixelvalues should mean less attenuation",
            "the following params can be supplied to override auto cropping of image before analysis:",
            "  \"skip_cropping\": True # do not attempt to crop",
            "  \"artefactborder_is_circle\": True # the artefactborder is a circle",
            "optionally set the following parameters:",
            "  \"auto_suffix\": true or false [false]  # to set or suppress auto_suffix generation"
        ],
        "version": "20210127"
    },
    "info": {
        "acqdatetime": {
            "params": {}
        },
        "header_series": {
            "params": {
                "auto_suffix": "add suffix based on detector name or table/wall distinction to results",
                "detector_names": "translation of serial numbers into your identifiers",
                "pidmm": "distance between phantom and image detector (both table and wall)",
                "roomname": "your identifier of this room",
                "sidmm": "distance between source and image detector (both table and wall)",
                "tablepidmm": "distance between phantom on table top and image detector",
                "wallpidmm": "distance between phantom on wall stand and image detector"
            }
        },
        "qc_series": {
            "params": {
                "auto_suffix": "add suffix based on detector name or table/wall distinction to results",
                "detector_names": "translation of serial numbers into your identifiers",
                "hough_options": {
                    "edge_mfrac": "binarization threshold of line enhanced image",
                    "frac_hi": "ignore values of the normalized image above dip+frac_hi*(avg-dip)",
                    "hough_mode": "filter to use enhance line structures",
                    "min_len_mm": "a detected line should be at least this length in the line enhanced image",
                    "pre_blur": "before normalization reduce noise by gaussian blurring with this sigma (px)"
                },
                "linepair_type": "must be RXT02 or typ38",
                "outvalue": "value of pixels outside xray field",
                "pidmm": "distance between phantom and image detector (both table and wall)",
                "roomname": "your identifier of this room",
                "sidmm": "distance between source and image detector (both table and wall)",
                "skip_cropping": "do not attempt to crop image.",
                "tablepidmm": "distance between phantom on table top and image detector",
                "use_mustbeinverted": "override determination if inversion of pixel values is needed.",
                "use_mustbemirrored": "force mirroring of image before analysis.",
                "use_mustbeprecropped": "use cropping to xmin_px;xmax_px;ymin_px;ymax_px before processing",
                "use_phantomrotation": "skip autodetect phantom orientation and use this angle (0, 90, 180, 270)",
                "use_pixmm": "override determination of pixel size in mm (on phantom)",
                "wallpidmm": "distance between phantom on wall stand and image detector",
                "xymm0.6": "position of the dot in 0.6 (in RXT02 or typ38)",
                "xymm1.0": "position of the dot in 1.0 (in RXT02)",
                "xymm1.4": "position of the dot in 1.4 (in typ38)",
                "xymm1.8": "position of the dot in 1.8 (in typ38)",
                "xymm4.6": "position of the dot in 4.6 (in typ38)"
            }
        },
        "uniformity_series": {
            "params": {
                "artefactborder_is_circle": "interpret artefactborderpx as circle.",
                "artefactborderpx": "number of pixels to skip on each side (xmin, xmax, ymin, ymax)",
                "auto_suffix": "add suffix based on detector name or table/wall distinction to results",
                "detector_names": "translation of serial numbers into your identifiers",
                "pidmm": "distance between phantom and image detector (both table and wall)",
                "roomname": "your identifier of this room",
                "sidmm": "distance between source and image detector (both table and wall)",
                "skip_cropping": "do not attempt to crop image.",
                "tablepidmm": "distance between phantom on table top and image detector",
                "use_mustbeinverted": "override determination if inversion of pixel values is needed.",
                "use_mustbemirrored": "force mirroring of image before analysis.",
                "use_mustbeprecropped": "use cropping to xmin_px;xmax_px;ymin_px;ymax_px before processing",
                "use_pixmm": "override determination of pixel size in mm (on phantom)",
                "wallpidmm": "distance between phantom on wall stand and image detector"
            }
        }
    }
}