{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {
                "auto_suffix": true, 
                "detector_names": "SN1537DT;Klein2|SN143070;Klein2|SN1522YG;Klein2|SN151685;Groot1", 
                "pidmm": 0, 
                "roomname": "WKZLOS"
            }
        }, 
        "uniformity_series": {
            "filters": {}, 
            "params": {
                "artefactborderpx": "35;35;35;35", 
                "auto_suffix": true, 
                "detector_names": "SN1537DT;Klein2|SN143070;Klein2|SN1522YG;Klein2|SN151685;Groot1", 
                "linepair_type": "None", 
                "pidmm": 0, 
                "roomname": "WKZLOS"
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "DX/Uniformity for Philips Digital Diagnost R4", 
        "usage": [
            "params that must be set for both actions below:", 
            "  \"roomname\": \"Bucky1\" # any identifier", 
            "and either (to set autodetection of table/wall stand):  \"tablepidmm\": 85 # distance [mm] between phantom on table and image detector", 
            "  \"wallpidmm\": 85 # distance [mm] between phantom on wall and image detector", 
            "or (to set forced usage of one distance e.g. for portable detectors):", 
            "  \"pidmm\": 0 # distance [mm] between phantom and image detector", 
            "optionally stands can be identified by their detectorId:", 
            "  \"detector_names\": \"SN1525UU;Tafel|SN152590;Wand\"", 
            "optionally the source to detector distance can be set manually (with autodetection of table/wall stand)", 
            "  \"tablesidmm\": 1150 # distance [mm] between source and image detector in table", 
            "  \"wallsidmm\": 2000 # distance [mm] between source and image detector in wall", 
            "or (to set forced usage of one distance e.g. for portable detectors):", 
            "  \"sidmm\": 1150 # distance [mm] between source and image detector", 
            "the following params can be supplied to override automatic determination:", 
            "  \"use_pixmm\": 0.262 # the size of one pixel in mm (on the phantom)", 
            "  \"use_mustbeinverted\": True # higher pixelvalues should mean less attenuation", 
            "  \"use_mustbemirrored\": True # force mirroring of image before analysis", 
            "optionally set the following parameters:", 
            "  \"auto_suffix\": true or false [false]  # to set or suppress auto_suffix generation", 
            "optionally set the following parameters:", 
            "  \"artefactborderpx\": l;r;t;b [35;35;35;35]  # number of pixels to skip on each side (xmin, xmax, ymin, ymax)"
        ], 
        "version": "20180206"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {
                "auto_suffix": "add suffix based on detector name or table/wall distinction to results", 
                "detector_names": "translation of serial numbers into your identifiers", 
                "pidmm": "distance between phantom and image detector", 
                "roomname": "your identifier of this room"
            }
        }, 
        "uniformity_series": {
            "params": {
                "auto_suffix": "add suffix based on detector name or table/wall distinction to results", 
                "detector_names": "translation of serial numbers into your identifiers", 
                "pidmm": "distance between phantom and image detector", 
                "roomname": "your identifier of this room"
            }
        }
    }
}